PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = semantic-decision
  keyboardBackend = ioHub
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Routines
  Routine practice_trials_instructions
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    TextComponent practice_instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bienvenido. Para esta tarea te pedimos que juzgues qué tan familiar te resulta la palabra.

        Para cada palabra, usá las flechas del teclado para indicar tu respuesta.

        Presiona ESPACIO para continuar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trials_instructions_2
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    TextComponent practice_instructions_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora vamos a hacer algunos ensayos de práctica. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_practice_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fx_cross_practice
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    TextComponent fx_cross_1
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine stim_practice
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    TextComponent practice_stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $practiceWord
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    KeyboardComponent key_resp_practice_stim
      allowedKeys = 'right','left'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      storeCorrect = True
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feedback_text = 'CORRECTO' if correctAns == key_resp_practice_stim.keys else 'INCORRECTO'
    TextComponent feedback_text_comp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora comenzará la tarea. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_instructiones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fx_cross_routine
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    TextComponent fx_cross_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine stim
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    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine acknowledgment
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    TextComponent text_ending
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Pulse ESPACIO para finalizar.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trials_instructions_3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Presioná la flecha IZQUIERDA si la palabra te resulta muy familiar, y la DERECHA si no te resulta muy familiar. Por ejemplo, las palabras 'bondad' y 'siesta' pueden ser consideradas muy familiares o comunes.

        Palabras como 'maleficio' o 'marqués' pueden ser consideradas no familiares o poco comunes.

        Pulse ESPACIO para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine practice_trials_instructions
  Routine practice_trials_instructions_3
  Routine practice_trials_instructions_2
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = resources/practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'practice (8)', 'practiceWord': 'novedad', 'englishWord': 'novelty', 'POS': 'N', 'LEN': 7, 'CON_M': 2.65, 'FAM_M': 5.65, 'Freq_condition': 'high_freq', 'Conc_condition': 'abstract', 'correctAns': 'j'},
      {'task': None, 'practiceWord': 'violencia', 'englishWord': 'violence', 'POS': 'N', 'LEN': 9, 'CON_M': 2.2, 'FAM_M': 6.05, 'Freq_condition': 'high_freq', 'Conc_condition': 'abstract', 'correctAns': 'j'},
      {'task': None, 'practiceWord': 'trance', 'englishWord': 'trance', 'POS': 'N V', 'LEN': 6, 'CON_M': 2.43, 'FAM_M': 2.9, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract', 'correctAns': 'k'},
      {'task': None, 'practiceWord': 'ademán', 'englishWord': 'gesture', 'POS': 'N', 'LEN': 6, 'CON_M': 3.22727272727273, 'FAM_M': 3.32, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract', 'correctAns': 'k'},
      {'task': None, 'practiceWord': 'celadora', 'englishWord': 'warden', 'POS': 'A N', 'LEN': 8, 'CON_M': 5.52380952380952, 'FAM_M': 3.48, 'Freq_condition': 'low_freq', 'Conc_condition': 'concrete', 'correctAns': 'k'},
      {'task': None, 'practiceWord': 'navajero', 'englishWord': 'navajero', 'POS': 'N', 'LEN': 8, 'CON_M': 5.95, 'FAM_M': 3.32, 'Freq_condition': 'low_freq', 'Conc_condition': 'concrete', 'correctAns': 'k'},
      {'task': None, 'practiceWord': 'peluquero', 'englishWord': 'hairdresser', 'POS': 'N', 'LEN': 9, 'CON_M': 6.14, 'FAM_M': 6.1, 'Freq_condition': 'high_freq', 'Conc_condition': 'concrete', 'correctAns': 'j'}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
    Routine fx_cross_practice
    Routine stim_practice
    Routine feedback
  LoopTerminator trials_practice
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'abstract_concrete', 'Word': 'enigma', 'englishWord': 'enigma', 'POS': 'N', 'LEN': 6, 'CON_M': 2.95, 'FAM_M': 4.23809523809524, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
      {'task': None, 'Word': 'quimera', 'englishWord': 'chimera', 'POS': 'N', 'LEN': 7, 'CON_M': 2.95238095238095, 'FAM_M': 3.35, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
      {'task': None, 'Word': 'inflación', 'englishWord': 'inflation', 'POS': 'N', 'LEN': 9, 'CON_M': 3.2, 'FAM_M': 3.4, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
      {'task': None, 'Word': 'heroísmo', 'englishWord': 'heroism', 'POS': 'N', 'LEN': 8, 'CON_M': 3.04545454545455, 'FAM_M': 3.45454545454545, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
      {'task': None, 'Word': 'severidad', 'englishWord': 'severity', 'POS': 'N', 'LEN': 9, 'CON_M': 3.36363636363636, 'FAM_M': 3.66666666666667, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
      {'task': None, 'Word': 'idealismo', 'englishWord': 'idealism', 'POS': 'N', 'LEN': 9, 'CON_M': 2.80952380952381, 'FAM_M': 3.71428571428571, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
      {'task': None, 'Word': 'divinidad', 'englishWord': 'divinity', 'POS': 'N', 'LEN': 9, 'CON_M': 1.85, 'FAM_M': 3.75, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'}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
    Routine fx_cross_routine
    Routine stim
  LoopTerminator trials
  Routine acknowledgment
